---
API: 2
OpenSesame: 3.1.4
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\ERP Testing Room\\Desktop\\Joanna"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend xpyriment
set bidi no
set background black

define loop Block1a
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item new_sequence
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "prime;target;ITI;mask;trigger;cresp;audio"
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime archer
	setcycle 0 target arch
	setcycle 0 ITI 100
	setcycle 0 mask DLKZFLZV
	setcycle 0 morph_trig 1
	setcycle 0 cresp 8.0
	setcycle 0 audio arch
	setcycle 0 audio_trig 210
	setcycle 0 prime_trig 200
	setcycle 1 prime brandish
	setcycle 1 target brand
	setcycle 1 ITI 300
	setcycle 1 mask LVFXKFCW
	setcycle 1 morph_trig 2
	setcycle 1 cresp 8.0
	setcycle 1 audio and
	setcycle 1 audio_trig 210
	setcycle 1 prime_trig 200
	setcycle 2 prime corner
	setcycle 2 target corn
	setcycle 2 ITI 500
	setcycle 2 mask LVJYDPXV
	setcycle 2 morph_trig 3
	setcycle 2 cresp 8.0
	setcycle 2 audio orn
	setcycle 2 audio_trig 210
	setcycle 2 prime_trig 200
	setcycle 3 prime dormant
	setcycle 3 target dorm
	setcycle 3 ITI 200
	setcycle 3 mask QQLJHGZG
	setcycle 3 morph_trig 4
	setcycle 3 cresp 8.0
	setcycle 3 audio orm
	setcycle 3 audio_trig 210
	setcycle 3 prime_trig 200
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	setcycle 5 prime fairy
	setcycle 5 target fair
	setcycle 5 ITI 400
	setcycle 5 mask SMQHSTGL
	setcycle 5 morph_trig 6
	setcycle 5 cresp 8.0
	setcycle 5 audio air
	setcycle 5 audio_trig 210
	setcycle 5 prime_trig 200
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	setcycle 8 prime helmet
	setcycle 8 target helm
	setcycle 8 ITI 400
	setcycle 8 mask QVXDKBSF
	setcycle 8 morph_trig 9
	setcycle 8 cresp 7.0
	setcycle 8 audio alm
	setcycle 8 audio_trig 211
	setcycle 8 prime_trig 200
	setcycle 9 prime inner
	setcycle 9 target inn
	setcycle 9 ITI 200
	setcycle 9 mask KVQSQHYT
	setcycle 9 morph_trig 10
	setcycle 9 cresp 7.0
	setcycle 9 audio an
	setcycle 9 audio_trig 211
	setcycle 9 prime_trig 200
	setcycle 10 prime limber
	setcycle 10 target limb
	setcycle 10 ITI 300
	setcycle 10 mask WPWCZXVJ
	setcycle 10 morph_trig 11
	setcycle 10 cresp 7.0
	setcycle 10 audio am
	setcycle 10 audio_trig 211
	setcycle 10 prime_trig 200
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	setcycle 13 prime mister
	setcycle 13 target mist
	setcycle 13 ITI 100
	setcycle 13 mask PPZBVBFG
	setcycle 13 morph_trig 14
	setcycle 13 cresp 7.0
	setcycle 13 audio east
	setcycle 13 audio_trig 211
	setcycle 13 prime_trig 200
	setcycle 14 prime pasture
	setcycle 14 target past
	setcycle 14 ITI 500
	setcycle 14 mask QYFBYHYJ
	setcycle 14 morph_trig 15
	setcycle 14 cresp 7.0
	setcycle 14 audio est
	setcycle 14 audio_trig 211
	setcycle 14 prime_trig 200
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	setcycle 16 prime ponder
	setcycle 16 target pond
	setcycle 16 ITI 500
	setcycle 16 mask YXHQXFMZ
	setcycle 16 morph_trig 17
	setcycle 16 cresp 7.0
	setcycle 16 audio eat
	setcycle 16 audio_trig 212
	setcycle 16 prime_trig 200
	setcycle 17 prime question
	setcycle 17 target quest
	setcycle 17 ITI 300
	setcycle 17 mask DXYFLBJY
	setcycle 17 morph_trig 18
	setcycle 17 cresp 7.0
	setcycle 17 audio act
	setcycle 17 audio_trig 212
	setcycle 17 prime_trig 200
	setcycle 18 prime render
	setcycle 18 target rend
	setcycle 18 ITI 100
	setcycle 18 mask WQLHQCPV
	setcycle 18 morph_trig 19
	setcycle 18 cresp 7.0
	setcycle 18 audio act
	setcycle 18 audio_trig 212
	setcycle 18 prime_trig 200
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	setcycle 20 prime tactile
	setcycle 20 target tact
	setcycle 20 ITI 200
	setcycle 20 mask HZWBDGSV
	setcycle 20 morph_trig 21
	setcycle 20 cresp 7.0
	setcycle 20 audio east
	setcycle 20 audio_trig 212
	setcycle 20 prime_trig 200
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	setcycle 24 prime proper
	setcycle 24 target art
	setcycle 24 ITI 100
	setcycle 24 mask KHNGQGGG
	setcycle 24 morph_trig 25
	setcycle 24 cresp 8.0
	setcycle 24 audio art
	setcycle 24 audio_trig 210
	setcycle 24 prime_trig 201
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	setcycle 32 prime wicker
	setcycle 32 target halt
	setcycle 32 ITI 100
	setcycle 32 mask DJZGXPYG
	setcycle 32 morph_trig 33
	setcycle 32 cresp 7.0
	setcycle 32 audio ilt
	setcycle 32 audio_trig 211
	setcycle 32 prime_trig 201
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	setcycle 40 prime tailor
	setcycle 40 target rapt
	setcycle 40 ITI 100
	setcycle 40 mask DHZQNDGD
	setcycle 40 morph_trig 41
	setcycle 40 cresp 7.0
	setcycle 40 audio oot
	setcycle 40 audio_trig 212
	setcycle 40 prime_trig 201
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	run sequence

define loop Block1b
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime banjo
	setcycle 0 target ban
	setcycle 0 ITI 500
	setcycle 0 mask DRTQQXCL
	setcycle 0 morph_trig 101
	setcycle 0 cresp 8.0
	setcycle 0 audio an
	setcycle 0 audio_trig 210
	setcycle 0 prime_trig 200
	setcycle 1 prime bangle
	setcycle 1 target bang
	setcycle 1 ITI 200
	setcycle 1 mask ZMSXPJMX
	setcycle 1 morph_trig 102
	setcycle 1 cresp 8.0
	setcycle 1 audio ang
	setcycle 1 audio_trig 210
	setcycle 1 prime_trig 200
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	setcycle 4 prime cashew
	setcycle 4 target cash
	setcycle 4 ITI 300
	setcycle 4 mask VJBJVVYV
	setcycle 4 morph_trig 105
	setcycle 4 cresp 8.0
	setcycle 4 audio ash
	setcycle 4 audio_trig 210
	setcycle 4 prime_trig 200
	setcycle 5 prime coupon
	setcycle 5 target coup
	setcycle 5 ITI 100
	setcycle 5 mask TVFJDVGK
	setcycle 5 morph_trig 106
	setcycle 5 cresp 8.0
	setcycle 5 audio oo
	setcycle 5 audio_trig 210
	setcycle 5 prime_trig 200
	setcycle 6 prime curtail
	setcycle 6 target curt
	setcycle 6 ITI 400
	setcycle 6 mask QMGVZGPH
	setcycle 6 morph_trig 107
	setcycle 6 cresp 8.0
	setcycle 6 audio urt
	setcycle 6 audio_trig 210
	setcycle 6 prime_trig 200
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	setcycle 8 prime harmony
	setcycle 8 target harm
	setcycle 8 ITI 200
	setcycle 8 mask SKZBZSZC
	setcycle 8 morph_trig 109
	setcycle 8 cresp 7.0
	setcycle 8 audio orm
	setcycle 8 audio_trig 211
	setcycle 8 prime_trig 200
	setcycle 9 prime hitch
	setcycle 9 target hit
	setcycle 9 ITI 300
	setcycle 9 mask JJPMDWSQ
	setcycle 9 morph_trig 110
	setcycle 9 cresp 7.0
	setcycle 9 audio eat
	setcycle 9 audio_trig 211
	setcycle 9 prime_trig 200
	setcycle 10 prime lentil
	setcycle 10 target lent
	setcycle 10 ITI 500
	setcycle 10 mask ZYYXXFXJ
	setcycle 10 morph_trig 111
	setcycle 10 cresp 7.0
	setcycle 10 audio ant
	setcycle 10 audio_trig 211
	setcycle 10 prime_trig 200
	setcycle 11 prime little
	setcycle 11 target lit
	setcycle 11 ITI 400
	setcycle 11 mask YWMNPRFW
	setcycle 11 morph_trig 112
	setcycle 11 cresp 7.0
	setcycle 11 audio utt
	setcycle 11 audio_trig 211
	setcycle 11 prime_trig 200
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	setcycle 13 prime pinch
	setcycle 13 target pin
	setcycle 13 ITI 100
	setcycle 13 mask GVBGYQVG
	setcycle 13 morph_trig 114
	setcycle 13 cresp 7.0
	setcycle 13 audio un
	setcycle 13 audio_trig 211
	setcycle 13 prime_trig 200
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	setcycle 16 prime ridge
	setcycle 16 target rid
	setcycle 16 ITI 200
	setcycle 16 mask QZFSBVLW
	setcycle 16 morph_trig 117
	setcycle 16 cresp 7.0
	setcycle 16 audio ant
	setcycle 16 audio_trig 212
	setcycle 16 prime_trig 200
	setcycle 17 prime sight
	setcycle 17 target sigh
	setcycle 17 ITI 500
	setcycle 17 mask BRRXZDLW
	setcycle 17 morph_trig 118
	setcycle 17 cresp 7.0
	setcycle 17 audio arm
	setcycle 17 audio_trig 212
	setcycle 17 prime_trig 200
	setcycle 18 prime starch
	setcycle 18 target star
	setcycle 18 ITI 300
	setcycle 18 mask KPJNYYZV
	setcycle 18 morph_trig 119
	setcycle 18 cresp 7.0
	setcycle 18 audio eye
	setcycle 18 audio_trig 212
	setcycle 18 prime_trig 200
	setcycle 19 prime surgeon
	setcycle 19 target surge
	setcycle 19 ITI 400
	setcycle 19 mask HCDDFXJY
	setcycle 19 morph_trig 120
	setcycle 19 cresp 7.0
	setcycle 19 audio ent
	setcycle 19 audio_trig 212
	setcycle 19 prime_trig 200
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	setcycle 24 prime vowel
	setcycle 24 target band
	setcycle 24 ITI 500
	setcycle 24 mask ZCZXSQYQ
	setcycle 24 morph_trig 125
	setcycle 24 cresp 8.0
	setcycle 24 audio and
	setcycle 24 audio_trig 210
	setcycle 24 prime_trig 201
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	setcycle 32 prime tinsel
	setcycle 32 target kid
	setcycle 32 ITI 300
	setcycle 32 mask PGMMRCBV
	setcycle 32 morph_trig 133
	setcycle 32 cresp 7.0
	setcycle 32 audio ide
	setcycle 32 audio_trig 211
	setcycle 32 prime_trig 201
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	setcycle 40 prime barge
	setcycle 40 target shove
	setcycle 40 ITI 500
	setcycle 40 mask CCJPXJWZ
	setcycle 40 morph_trig 141
	setcycle 40 cresp 7.0
	setcycle 40 audio urt
	setcycle 40 audio_trig 212
	setcycle 40 prime_trig 201
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	run sequence

define loop Block2a
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item new_sequence
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "prime;target;ITI;mask;trigger;cresp;audio"
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime archer
	setcycle 0 target arch
	setcycle 0 ITI 300
	setcycle 0 mask DLKZFLZV
	setcycle 0 morph_trig 1
	setcycle 0 cresp 7.0
	setcycle 0 audio urch
	setcycle 0 audio_trig 211
	setcycle 0 prime_trig 200
	setcycle 1 prime brandish
	setcycle 1 target brand
	setcycle 1 ITI 200
	setcycle 1 mask LVFXKFCW
	setcycle 1 morph_trig 2
	setcycle 1 cresp 7.0
	setcycle 1 audio ind
	setcycle 1 audio_trig 211
	setcycle 1 prime_trig 200
	setcycle 2 prime corner
	setcycle 2 target corn
	setcycle 2 ITI 500
	setcycle 2 mask LVJYDPXV
	setcycle 2 morph_trig 3
	setcycle 2 cresp 7.0
	setcycle 2 audio urn
	setcycle 2 audio_trig 211
	setcycle 2 prime_trig 200
	setcycle 3 prime dormant
	setcycle 3 target dorm
	setcycle 3 ITI 400
	setcycle 3 mask QQLJHGZG
	setcycle 3 morph_trig 4
	setcycle 3 cresp 7.0
	setcycle 3 audio arm
	setcycle 3 audio_trig 211
	setcycle 3 prime_trig 200
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	setcycle 6 prime figment
	setcycle 6 target fig
	setcycle 6 ITI 100
	setcycle 6 mask CZVXSXZC
	setcycle 6 morph_trig 7
	setcycle 6 cresp 7.0
	setcycle 6 audio ag
	setcycle 6 audio_trig 211
	setcycle 6 prime_trig 200
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	setcycle 8 prime helmet
	setcycle 8 target helm
	setcycle 8 ITI 200
	setcycle 8 mask QVXDKBSF
	setcycle 8 morph_trig 9
	setcycle 8 cresp 7.0
	setcycle 8 audio im
	setcycle 8 audio_trig 212
	setcycle 8 prime_trig 200
	setcycle 9 prime inner
	setcycle 9 target inn
	setcycle 9 ITI 500
	setcycle 9 mask KVQSQHYT
	setcycle 9 morph_trig 10
	setcycle 9 cresp 7.0
	setcycle 9 audio and
	setcycle 9 audio_trig 212
	setcycle 9 prime_trig 200
	setcycle 10 prime limber
	setcycle 10 target limb
	setcycle 10 ITI 400
	setcycle 10 mask WPWCZXVJ
	setcycle 10 morph_trig 11
	setcycle 10 cresp 7.0
	setcycle 10 audio ast
	setcycle 10 audio_trig 212
	setcycle 10 prime_trig 200
	setcycle 11 prime manage
	setcycle 11 target man
	setcycle 11 ITI 100
	setcycle 11 mask CFDKKPHP
	setcycle 11 morph_trig 12
	setcycle 11 cresp 7.0
	setcycle 11 audio ig
	setcycle 11 audio_trig 212
	setcycle 11 prime_trig 200
	setcycle 12 prime master
	setcycle 12 target mast
	setcycle 12 ITI 300
	setcycle 12 mask KPKFWYZK
	setcycle 12 morph_trig 13
	setcycle 12 cresp 7.0
	setcycle 12 audio ill
	setcycle 12 audio_trig 212
	setcycle 12 prime_trig 200
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	setcycle 16 prime ponder
	setcycle 16 target pond
	setcycle 16 ITI 300
	setcycle 16 mask YXHQXFMZ
	setcycle 16 morph_trig 17
	setcycle 16 cresp 8.0
	setcycle 16 audio ond
	setcycle 16 audio_trig 210
	setcycle 16 prime_trig 200
	setcycle 17 prime question
	setcycle 17 target quest
	setcycle 17 ITI 500
	setcycle 17 mask DXYFLBJY
	setcycle 17 morph_trig 18
	setcycle 17 cresp 8.0
	setcycle 17 audio est
	setcycle 17 audio_trig 210
	setcycle 17 prime_trig 200
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	setcycle 23 prime treaty
	setcycle 23 target treat
	setcycle 23 ITI 200
	setcycle 23 mask QVDGKQXP
	setcycle 23 morph_trig 24
	setcycle 23 cresp 8.0
	setcycle 23 audio eat
	setcycle 23 audio_trig 210
	setcycle 23 prime_trig 200
	setcycle 24 prime proper
	setcycle 24 target art
	setcycle 24 ITI 500
	setcycle 24 mask KHNGQGGG
	setcycle 24 morph_trig 25
	setcycle 24 cresp 7.0
	setcycle 24 audio urt
	setcycle 24 audio_trig 211
	setcycle 24 prime_trig 201
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	setcycle 26 prime traitor
	setcycle 26 target clam
	setcycle 26 ITI 100
	setcycle 26 mask KXFYWQDP
	setcycle 26 morph_trig 27
	setcycle 26 cresp 7.0
	setcycle 26 audio im
	setcycle 26 audio_trig 211
	setcycle 26 prime_trig 201
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	setcycle 32 prime wicker
	setcycle 32 target halt
	setcycle 32 ITI 300
	setcycle 32 mask DJZGXPYG
	setcycle 32 morph_trig 33
	setcycle 32 cresp 7.0
	setcycle 32 audio ust
	setcycle 32 audio_trig 212
	setcycle 32 prime_trig 201
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	setcycle 40 prime tailor
	setcycle 40 target rapt
	setcycle 40 ITI 100
	setcycle 40 mask DHZQNDGD
	setcycle 40 morph_trig 41
	setcycle 40 cresp 8.0
	setcycle 40 audio apt
	setcycle 40 audio_trig 210
	setcycle 40 prime_trig 201
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	run sequence

define loop Block2b
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime banjo
	setcycle 0 target ban
	setcycle 0 ITI 100
	setcycle 0 mask DRTQQXCL
	setcycle 0 morph_trig 101
	setcycle 0 cresp 7
	setcycle 0 audio ine
	setcycle 0 audio_trig 211
	setcycle 0 prime_trig 200
	setcycle 1 prime bangle
	setcycle 1 target bang
	setcycle 1 ITI 300
	setcycle 1 mask ZMSXPJMX
	setcycle 1 morph_trig 102
	setcycle 1 cresp 7
	setcycle 1 audio ung
	setcycle 1 audio_trig 211
	setcycle 1 prime_trig 200
	setcycle 2 prime beech
	setcycle 2 target bee
	setcycle 2 ITI 400
	setcycle 2 mask VZZYRWWX
	setcycle 2 morph_trig 103
	setcycle 2 cresp 7
	setcycle 2 audio eye
	setcycle 2 audio_trig 211
	setcycle 2 prime_trig 200
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	setcycle 5 prime coupon
	setcycle 5 target coup
	setcycle 5 ITI 500
	setcycle 5 mask TVFJDVGK
	setcycle 5 morph_trig 106
	setcycle 5 cresp 7
	setcycle 5 audio ow
	setcycle 5 audio_trig 211
	setcycle 5 prime_trig 200
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	setcycle 8 prime harmony
	setcycle 8 target harm
	setcycle 8 ITI 100
	setcycle 8 mask SKZBZSZC
	setcycle 8 morph_trig 109
	setcycle 8 cresp 7
	setcycle 8 audio urge
	setcycle 8 audio_trig 212
	setcycle 8 prime_trig 200
	setcycle 9 prime hitch
	setcycle 9 target hit
	setcycle 9 ITI 300
	setcycle 9 mask JJPMDWSQ
	setcycle 9 morph_trig 110
	setcycle 9 cresp 7
	setcycle 9 audio un
	setcycle 9 audio_trig 212
	setcycle 9 prime_trig 200
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	setcycle 12 prime partner
	setcycle 12 target part
	setcycle 12 ITI 500
	setcycle 12 mask QHYWFVDY
	setcycle 12 morph_trig 113
	setcycle 12 cresp 7
	setcycle 12 audio it
	setcycle 12 audio_trig 212
	setcycle 12 prime_trig 200
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	setcycle 15 prime pumpkin
	setcycle 15 target pump
	setcycle 15 ITI 200
	setcycle 15 mask XFGQGSHJ
	setcycle 15 morph_trig 116
	setcycle 15 cresp 7
	setcycle 15 audio id
	setcycle 15 audio_trig 212
	setcycle 15 prime_trig 200
	setcycle 16 prime ridge
	setcycle 16 target rid
	setcycle 16 ITI 400
	setcycle 16 mask QZFSBVLW
	setcycle 16 morph_trig 117
	setcycle 16 cresp 8
	setcycle 16 audio id
	setcycle 16 audio_trig 210
	setcycle 16 prime_trig 200
	setcycle 17 prime sight
	setcycle 17 target sigh
	setcycle 17 ITI 100
	setcycle 17 mask BRRXZDLW
	setcycle 17 morph_trig 118
	setcycle 17 cresp 8
	setcycle 17 audio eye
	setcycle 17 audio_trig 210
	setcycle 17 prime_trig 200
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	setcycle 20 prime tendril
	setcycle 20 target tend
	setcycle 20 ITI 500
	setcycle 20 mask ZBBQFJMH
	setcycle 20 morph_trig 121
	setcycle 20 cresp 8
	setcycle 20 audio end
	setcycle 20 audio_trig 210
	setcycle 20 prime_trig 200
	setcycle 21 prime twinkle
	setcycle 21 target twin
	setcycle 21 ITI 200
	setcycle 21 mask CCVMCRBC
	setcycle 21 morph_trig 122
	setcycle 21 cresp 8
	setcycle 21 audio in
	setcycle 21 audio_trig 210
	setcycle 21 prime_trig 200
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	setcycle 24 prime vowel
	setcycle 24 target band
	setcycle 24 ITI 400
	setcycle 24 mask ZCZXSQYQ
	setcycle 24 morph_trig 125
	setcycle 24 cresp 7
	setcycle 24 audio end
	setcycle 24 audio_trig 211
	setcycle 24 prime_trig 201
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	setcycle 26 prime twitch
	setcycle 26 target bell
	setcycle 26 ITI 200
	setcycle 26 mask NMFVYYKN
	setcycle 26 morph_trig 127
	setcycle 26 cresp 7
	setcycle 26 audio ill
	setcycle 26 audio_trig 211
	setcycle 26 prime_trig 201
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	setcycle 30 prime napkin
	setcycle 30 target fell
	setcycle 30 ITI 300
	setcycle 30 mask QDCHHTXB
	setcycle 30 morph_trig 131
	setcycle 30 cresp 7
	setcycle 30 audio ail
	setcycle 30 audio_trig 211
	setcycle 30 prime_trig 201
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	setcycle 32 prime tinsel
	setcycle 32 target kid
	setcycle 32 ITI 400
	setcycle 32 mask PGMMRCBV
	setcycle 32 morph_trig 133
	setcycle 32 cresp 7
	setcycle 32 audio arse
	setcycle 32 audio_trig 212
	setcycle 32 prime_trig 201
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	setcycle 40 prime barge
	setcycle 40 target shove
	setcycle 40 ITI 500
	setcycle 40 mask CCJPXJWZ
	setcycle 40 morph_trig 141
	setcycle 40 cresp 8
	setcycle 40 audio of
	setcycle 40 audio_trig 210
	setcycle 40 prime_trig 201
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	run sequence

define loop Block3a
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item new_sequence
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set column_order "prime;target;ITI;mask;trigger;cresp;audio"
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime archer
	setcycle 0 target arch
	setcycle 0 ITI 200
	setcycle 0 mask DLKZFLZV
	setcycle 0 morph_trig 1
	setcycle 0 cresp 7.0
	setcycle 0 audio orm
	setcycle 0 audio_trig 212
	setcycle 0 prime_trig 200
	setcycle 1 prime brandish
	setcycle 1 target brand
	setcycle 1 ITI 200
	setcycle 1 mask LVFXKFCW
	setcycle 1 morph_trig 2
	setcycle 1 cresp 7.0
	setcycle 1 audio ist
	setcycle 1 audio_trig 212
	setcycle 1 prime_trig 200
	setcycle 2 prime corner
	setcycle 2 target corn
	setcycle 2 ITI 400
	setcycle 2 mask LVJYDPXV
	setcycle 2 morph_trig 3
	setcycle 2 cresp 7.0
	setcycle 2 audio end
	setcycle 2 audio_trig 212
	setcycle 2 prime_trig 200
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	setcycle 4 prime easter
	setcycle 4 target east
	setcycle 4 ITI 300
	setcycle 4 mask YXMMDPJP
	setcycle 4 morph_trig 5
	setcycle 4 cresp 7.0
	setcycle 4 audio orn
	setcycle 4 audio_trig 212
	setcycle 4 prime_trig 200
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	setcycle 8 prime helmet
	setcycle 8 target helm
	setcycle 8 ITI 200
	setcycle 8 mask QVXDKBSF
	setcycle 8 morph_trig 9
	setcycle 8 cresp 8.0
	setcycle 8 audio elm
	setcycle 8 audio_trig 210
	setcycle 8 prime_trig 200
	setcycle 9 prime inner
	setcycle 9 target inn
	setcycle 9 ITI 400
	setcycle 9 mask KVQSQHYT
	setcycle 9 morph_trig 10
	setcycle 9 cresp 8.0
	setcycle 9 audio in
	setcycle 9 audio_trig 210
	setcycle 9 prime_trig 200
	setcycle 10 prime limber
	setcycle 10 target limb
	setcycle 10 ITI 300
	setcycle 10 mask WPWCZXVJ
	setcycle 10 morph_trig 11
	setcycle 10 cresp 8.0
	setcycle 10 audio im
	setcycle 10 audio_trig 210
	setcycle 10 prime_trig 200
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	setcycle 13 prime mister
	setcycle 13 target mist
	setcycle 13 ITI 100
	setcycle 13 mask PPZBVBFG
	setcycle 13 morph_trig 14
	setcycle 13 cresp 8.0
	setcycle 13 audio ist
	setcycle 13 audio_trig 210
	setcycle 13 prime_trig 200
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	setcycle 15 prime pillage
	setcycle 15 target pill
	setcycle 15 ITI 500
	setcycle 15 mask QZDCVVBK
	setcycle 15 morph_trig 16
	setcycle 15 cresp 8.0
	setcycle 15 audio ill
	setcycle 15 audio_trig 210
	setcycle 15 prime_trig 200
	setcycle 16 prime ponder
	setcycle 16 target pond
	setcycle 16 ITI 100
	setcycle 16 mask YXHQXFMZ
	setcycle 16 morph_trig 17
	setcycle 16 cresp 7.0
	setcycle 16 audio end
	setcycle 16 audio_trig 211
	setcycle 16 prime_trig 200
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	setcycle 18 prime render
	setcycle 18 target rend
	setcycle 18 ITI 300
	setcycle 18 mask WQLHQCPV
	setcycle 18 morph_trig 19
	setcycle 18 cresp 7.0
	setcycle 18 audio and
	setcycle 18 audio_trig 211
	setcycle 18 prime_trig 200
	setcycle 19 prime sandal
	setcycle 19 target sand
	setcycle 19 ITI 200
	setcycle 19 mask FHGFBCPF
	setcycle 19 morph_trig 20
	setcycle 19 cresp 7.0
	setcycle 19 audio ond
	setcycle 19 audio_trig 211
	setcycle 19 prime_trig 200
	setcycle 20 prime tactile
	setcycle 20 target tact
	setcycle 20 ITI 500
	setcycle 20 mask HZWBDGSV
	setcycle 20 morph_trig 21
	setcycle 20 cresp 7.0
	setcycle 20 audio oct
	setcycle 20 audio_trig 211
	setcycle 20 prime_trig 200
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	setcycle 22 prime tractable
	setcycle 22 target tract
	setcycle 22 ITI 400
	setcycle 22 mask WJKQFMWQ
	setcycle 22 morph_trig 23
	setcycle 22 cresp 7.0
	setcycle 22 audio oct
	setcycle 22 audio_trig 211
	setcycle 22 prime_trig 200
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	setcycle 24 prime proper
	setcycle 24 target art
	setcycle 24 ITI 400
	setcycle 24 mask KHNGQGGG
	setcycle 24 morph_trig 25
	setcycle 24 cresp 7.0
	setcycle 24 audio eat
	setcycle 24 audio_trig 212
	setcycle 24 prime_trig 201
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	setcycle 32 prime wicker
	setcycle 32 target halt
	setcycle 32 ITI 500
	setcycle 32 mask DJZGXPYG
	setcycle 32 morph_trig 33
	setcycle 32 cresp 8.0
	setcycle 32 audio ult
	setcycle 32 audio_trig 210
	setcycle 32 prime_trig 201
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	setcycle 40 prime tailor
	setcycle 40 target rapt
	setcycle 40 ITI 500
	setcycle 40 mask DHZQNDGD
	setcycle 40 morph_trig 41
	setcycle 40 cresp 7.0
	setcycle 40 audio opt
	setcycle 40 audio_trig 211
	setcycle 40 prime_trig 201
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	run sequence

define loop Block3b
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 96
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 prime banjo
	setcycle 0 target ban
	setcycle 0 ITI 300
	setcycle 0 mask DRTQQXCL
	setcycle 0 morph_trig 101
	setcycle 0 cresp 7.0
	setcycle 0 audio urt
	setcycle 0 audio_trig 212
	setcycle 0 prime_trig 200
	setcycle 1 prime bangle
	setcycle 1 target bang
	setcycle 1 ITI 500
	setcycle 1 mask ZMSXPJMX
	setcycle 1 morph_trig 102
	setcycle 1 cresp 7.0
	setcycle 1 audio are
	setcycle 1 audio_trig 212
	setcycle 1 prime_trig 200
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	setcycle 4 prime cashew
	setcycle 4 target cash
	setcycle 4 ITI 200
	setcycle 4 mask VJBJVVYV
	setcycle 4 morph_trig 105
	setcycle 4 cresp 7.0
	setcycle 4 audio in
	setcycle 4 audio_trig 212
	setcycle 4 prime_trig 200
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	setcycle 7 prime freeze
	setcycle 7 target free
	setcycle 7 ITI 100
	setcycle 7 mask KQPQMLBG
	setcycle 7 morph_trig 108
	setcycle 7 cresp 7.0
	setcycle 7 audio art
	setcycle 7 audio_trig 212
	setcycle 7 prime_trig 200
	setcycle 8 prime harmony
	setcycle 8 target harm
	setcycle 8 ITI 300
	setcycle 8 mask SKZBZSZC
	setcycle 8 morph_trig 109
	setcycle 8 cresp 8.0
	setcycle 8 audio arm
	setcycle 8 audio_trig 210
	setcycle 8 prime_trig 200
	setcycle 9 prime hitch
	setcycle 9 target hit
	setcycle 9 ITI 200
	setcycle 9 mask JJPMDWSQ
	setcycle 9 morph_trig 110
	setcycle 9 cresp 8.0
	setcycle 9 audio it
	setcycle 9 audio_trig 210
	setcycle 9 prime_trig 200
	setcycle 10 prime lentil
	setcycle 10 target lent
	setcycle 10 ITI 500
	setcycle 10 mask ZYYXXFXJ
	setcycle 10 morph_trig 111
	setcycle 10 cresp 8.0
	setcycle 10 audio ent
	setcycle 10 audio_trig 210
	setcycle 10 prime_trig 200
	setcycle 11 prime little
	setcycle 11 target lit
	setcycle 11 ITI 100
	setcycle 11 mask YWMNPRFW
	setcycle 11 morph_trig 112
	setcycle 11 cresp 8.0
	setcycle 11 audio it
	setcycle 11 audio_trig 210
	setcycle 11 prime_trig 200
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	setcycle 14 prime plantain
	setcycle 14 target plant
	setcycle 14 ITI 400
	setcycle 14 mask WJWXQFJJ
	setcycle 14 morph_trig 115
	setcycle 14 cresp 8.0
	setcycle 14 audio ant
	setcycle 14 audio_trig 210
	setcycle 14 prime_trig 200
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	setcycle 16 prime ridge
	setcycle 16 target rid
	setcycle 16 ITI 500
	setcycle 16 mask QZFSBVLW
	setcycle 16 morph_trig 117
	setcycle 16 cresp 7.0
	setcycle 16 audio eed
	setcycle 16 audio_trig 211
	setcycle 16 prime_trig 200
	setcycle 17 prime sight
	setcycle 17 target sigh
	setcycle 17 ITI 100
	setcycle 17 mask BRRXZDLW
	setcycle 17 morph_trig 118
	setcycle 17 cresp 7.0
	setcycle 17 audio ee
	setcycle 17 audio_trig 211
	setcycle 17 prime_trig 200
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	setcycle 19 prime surgeon
	setcycle 19 target surge
	setcycle 19 ITI 200
	setcycle 19 mask HCDDFXJY
	setcycle 19 morph_trig 120
	setcycle 19 cresp 7.0
	setcycle 19 audio arge
	setcycle 19 audio_trig 211
	setcycle 19 prime_trig 200
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	setcycle 23 prime window
	setcycle 23 target wind
	setcycle 23 ITI 400
	setcycle 23 mask YKMMBTZY
	setcycle 23 morph_trig 124
	setcycle 23 cresp 7.0
	setcycle 23 audio end
	setcycle 23 audio_trig 211
	setcycle 23 prime_trig 200
	setcycle 24 prime vowel
	setcycle 24 target band
	setcycle 24 ITI 400
	setcycle 24 mask ZCZXSQYQ
	setcycle 24 morph_trig 125
	setcycle 24 cresp 7.0
	setcycle 24 audio itch
	setcycle 24 audio_trig 212
	setcycle 24 prime_trig 201
	setcycle 25 prime yellow
	setcycle 25 target bar
	setcycle 25 ITI 200
	setcycle 25 mask CJDJHVHC
	setcycle 25 morph_trig 126
	setcycle 25 cresp 7.0
	setcycle 25 audio of
	setcycle 25 audio_trig 212
	setcycle 25 prime_trig 201
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	setcycle 32 prime tinsel
	setcycle 32 target kid
	setcycle 32 ITI 100
	setcycle 32 mask PGMMRCBV
	setcycle 32 morph_trig 133
	setcycle 32 cresp 8.0
	setcycle 32 audio id
	setcycle 32 audio_trig 210
	setcycle 32 prime_trig 201
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	setcycle 40 prime barge
	setcycle 40 target shove
	setcycle 40 ITI 500
	setcycle 40 mask CCJPXJWZ
	setcycle 40 morph_trig 141
	setcycle 40 cresp 7.0
	setcycle 40 audio ave
	setcycle 40 audio_trig 211
	setcycle 40 prime_trig 201
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	run sequence

define sketchpad ITI
	set duration "[ITI]"
	set description "Displays stimuli"

define sketchpad Instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Welcome!<br /><br />In this experiment you will see a string of random consonants on the screen, followed by a word. At the same time <br />you will hear a spoken syllable through the headphones.<br /><br />For each word, determine if the sound you hear rhymes with the word you see. After the word disappears, you <br />will have 1.5 seconds to make your response. If the word DOES rhyme, press one of the buttons on the back of <br />the controller with your RIGHT finger. If the word does NOT rhyme, press one of the buttons on the back of <br />the controller with your LEFT finger.<br /><br />After every 3 words, you will see something like this (--). This indicates that it is a blink break. Please try to <br />blink only during these breaks.<br /><br />There will also be self-timed breaks every 15 minutes or so. If you have any questions or concerns, please <br />call out to the experimenter during these breaks!<br /><br />Press the spacebar to begin the experiment." x=0 y=0 z_index=0

define sampler audio
	set volume 1
	set stop_after 0
	set sample "[audio].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 492
	set description "Plays a sound file in .wav or .ogg format"

define inline_script audio_trigger
	set description "Executes Python code"
	___run__
	global io
	trigger = self.get("audio_trig")
	port = 0x1FF0
	try:
		io.DlPortWritePortUchar(port, trigger)
	except: 
		print 'Failed to send trigger!'
	__end__
	set _prepare ""

define sketchpad blink_screen
	set duration 792
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="(--)" x=0 y=0 z_index=0

define sketchpad break1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've reached the first break!<br /><br />Take a break for as long as you want. Call out or wave to the experimenter if you need <br />anything or if you want to use the restroom. <br /><br />When you are ready to resume the experiment, press the space bar." x=0 y=0 z_index=0

define sketchpad break2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've reached the second break! One more section to go!<br /><br />Take a break for as long as you want. Call out or wave to the experimenter if you need <br />anything or if you want to use the restroom. <br /><br />When you are ready to resume the experiment, press the space bar." x=0 y=0 z_index=0

define sketchpad break3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Congratulations! You have completed the experiment!<br /><br />The experimenter will be with you shortly." x=0 y=0 z_index=0

define inline_script correct_trigger
	set description "Executes Python code"
	___run__
	global io
	trigger = 220
	port = 0x1FF0
	try:
		io.DlPortWritePortUchar(port, trigger)
	except: 
		print 'Failed to send trigger!'
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run getting_started always
	run start_trigger always
	run reset_counter always
	run reset_counter_1 always
	run Instructions always
	run Block1a always
	run Block1b always
	run break1 always
	run reset_counter always
	run reset_counter_1 always
	run Block2a always
	run Block2b always
	run break2 always
	run reset_counter always
	run reset_counter_1 always
	run Block3a always
	run Block3b always
	run break3 always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script inc_counter
	set description "Executes Python code"
	___run__
	exp.set("counter", exp.get("counter")+1)
	__end__
	set _prepare ""

define inline_script incorrect_trigger
	set description "Executes Python code"
	___run__
	global io
	trigger = "221"
	port = 0x1FF0
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
	__end__
	set _prepare ""

define inline_script incorrect_trigger_1
	set description "Executes Python code"
	___run__
	global io
	if self.get("response") == self.get("cresp"):
		trigger = 220
	else:
		trigger = 221
	port = 0x1FF0
	try:
		io.DlPortWritePortUchar(port, trigger)
	except:
		print 'Failed to send trigger!'
	__end__
	set _prepare ""

define joystick joystick
	set timeout 1500
	set description "Collects input from a joystick or gamepad"
	set correct_response "[cresp]"
	set allowed_responses ""
	set _dummy no
	set _device 0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad mask
	set duration 492
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[mask]" x=0 y=0 z_index=0

define inline_script morph_trigger
	set description "Executes Python code"
	___run__
	global io
	trigger = self.get("morph_trig")
	port = 0x1FF0
	try:
		io.DlPortWritePortUchar(port, trigger)
	except: 
		print 'Failed to send trigger!'
	__end__
	set _prepare ""

define sketchpad prime
	set duration 45
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[prime]" x=0 y=0 z_index=0

define inline_script prime_trigger
	set description "Executes Python code"
	___run__
	global io
	trigger = self.get("prime_trig")
	port = 0x1FF0
	try:
		io.DlPortWritePortUchar(port, trigger)
	except: 
		print 'Failed to send trigger!'
	__end__
	set _prepare ""

define inline_script reset_counter
	set description "Executes Python code"
	set _run ""
	___prepare__
	exp.set("counter", 0)
	__end__

define inline_script reset_counter_1
	set description "Executes Python code"
	___run__
	exp.set("counter", 0)
	__end__
	set _prepare ""

define sketchpad response_screen
	set duration 0
	set description "Displays stimuli"

define sequence sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inc_counter always
	run mask always
	run prime_trigger always
	run prime always
	run morph_trigger always
	run target always
	run audio always
	run audio_trigger always
	run response_screen always
	run joystick always
	run correct_trigger "[correct]=1"
	run incorrect_trigger_1 always
	run blink_screen "[counter]%3=0"
	run ITI always
	run logger always

define inline_script start_trigger
	set description "Executes Python code"
	set _run ""
	___prepare__
	try:
		from ctypes import windll
		global io
		io = windll.dlportio
	except:
		print 'The parallel port couldn\'t be opened'
	__end__

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[target]" x=0 y=0 z_index=0

